CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:TileScan 1_(?P<Col>.*)_(?P<Row>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:RFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:GFP
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:Grey_GFP
    Convert blue to gray?:No
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
ColorToGray:[module_num:6|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
    Select the input image:RFP
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Gray_RFP
    Convert green to gray?:No
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    Convert blue to gray?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Grey_GFP
    Name the output image:Illum_GFP
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Gray_RFP
    Name the output image:Illum_RFP
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Grey_GFP
    Name the output image:CorrGFP
    Select the illumination function:Illum_GFP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:Gray_RFP
    Name the output image:CorrRFP
    Select the illumination function:Illum_RFP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Merged
    Image or measurement?:Image
    Select the first image:CorrGFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CorrRFP
    Multiply the second image by:1.0
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CorrGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Gray_GFP
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrRFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Gray_RFP
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Merged
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Merged
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
