CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:GFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:RFP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Gray_GFP")
    Name to assign these images:Gray_GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Gray_RFP")
    Name to assign these images:Gray_RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Merged")
    Name to assign these images:Merged
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Merged
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,130
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:4.5
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.08,1.0
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    Size of adaptive window:300
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    Thresholding method:Sauvola

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merged
    Name the output image:Nuc
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Nuclei

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:Nuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Nuc
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Gray_GFP, Gray_RFP
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_MaxIntensity_Gray_GFP,Nuclei|Intensity_MaxIntensity_Gray_RFP,Nuclei|Intensity_IntegratedIntensityEdge_Gray_GFP,Nuclei|Intensity_IntegratedIntensityEdge_Gray_RFP,Nuclei|Intensity_UpperQuartileIntensity_Gray_GFP,Nuclei|Intensity_UpperQuartileIntensity_Gray_RFP,Nuclei|Intensity_LowerQuartileIntensity_Gray_RFP,Nuclei|Intensity_LowerQuartileIntensity_Gray_GFP,Nuclei|Intensity_MADIntensity_Gray_RFP,Nuclei|Intensity_MADIntensity_Gray_GFP,Nuclei|Intensity_MedianIntensity_Gray_GFP,Nuclei|Intensity_MedianIntensity_Gray_RFP,Nuclei|Intensity_MaxIntensityEdge_Gray_RFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
