CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'LT: If file name starts from something different than TileScan 0-9 then change it in regular expression.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Drug', 'ERK': 'Drug', 'BF': 'Drug'}, {'DNA': 'Conc', 'ERK': 'Conc', 'BF': 'Conc'}, {'DNA': 'Rep', 'ERK': 'Rep', 'BF': 'Rep'}, {'DNA': 'Field', 'ERK': 'Field', 'BF': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:ERK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['LT: Backgroung illumination correction. Uses all images for correction mask, recommended to use on all image set at once for best results.']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
    Select the input image:ERK
    Name the output image:IllumERK
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['LT: Applies correction mask to KTR images']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
    Select the input image:ERK
    Name the output image:CorrERK
    Select the illumination function:IllumERK
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:8|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:9|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notes:['LT: Save corrected KTR channel images to new folder (Corrected) with the same file name.']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
    Select the type of image to save:Image
    Select the image to save:CorrERK
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:10|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notes:['LT: Save initial DNA channel images to new folder(Corrected) with the same file name.']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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:BF
    Select method for constructing file names:From image filename
    Select image name for file prefix:BF
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Corrected
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
