CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:266
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'LT: If file name starts from something different than TileScan 0-9 then change it in regular expression.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[ ](?P<Date>.*)[\\](?P<Timepoint>.*)[\\].*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'CellS1': 'Drug', 'CellB1': 'Drug', 'ERK': 'Drug', 'DNA': 'Drug', 'BF': 'Drug'}, {'CellS1': 'Conc', 'CellB1': 'Conc', 'ERK': 'Conc', 'DNA': 'Conc', 'BF': 'Conc'}, {'CellS1': 'Field', 'CellB1': 'Field', 'ERK': 'Field', 'DNA': 'Field', 'BF': 'Field'}, {'CellS1': 'Rep', 'CellB1': 'Rep', 'ERK': 'Rep', 'DNA': 'Rep', 'BF': 'Rep'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:ERK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "masks.")
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    Name to assign these objects:CellS1
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "masksbig")
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    Name to assign these objects:CellB1
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['3.1 Identify small nuclei']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
    Select the input image:DNA
    Name the primary objects to be identified:NucS
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3.5
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.045,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:6|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notes:['3.2 Identify big nuclei']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
    Select the input image:DNA
    Name the primary objects to be identified:NucB
    Typical diameter of objects, in pixel units (Min,Max):51,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:4.8
    Threshold correction factor:1.55
    Lower and upper bounds on threshold:0.055,1.0
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    Size of adaptive window:450
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    Thresholding method:Sauvola

MeasureObjectSizeShape:[module_num:7|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notes:['3.3 Measure nuclei size']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
    Select object sets to measure:NucB, NucS
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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notes:['3.3 Select nuclei (NucSnorm) with area larger than 200 pixels (can be adjusted) and keep the rest as DeadNuclei']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
    Select the objects to filter:NucS
    Name the output objects:NucSnorm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:DeadNuclei
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:9|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notes:['3.4 Save images with initial nuclei outlines, nuclei area and marked dead nuclei  ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayNuclei1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8000FF
    Select objects to display:NucB
    Select outline color:cyan
    Select objects to display:NucSnorm
    Select outline color:#FF0080
    Select objects to display:DeadNuclei

DisplayDataOnImage:[module_num:10|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notes:['3.4 Save images with initial nuclei outlines, nuclei area and marked dead nuclei  ']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
    Display object or image measurements?:Object
    Select the input objects:NucS
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:OverlayNuclei1
    Text color:white
    Name the output image that has the measurements displayed:DisplayNuclei1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:11|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notes:['3.4 Save images with initial nuclei outlines, nuclei area and marked dead nuclei  ']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
    Display object or image measurements?:Object
    Select the input objects:NucB
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:DisplayNuclei1
    Text color:white
    Name the output image that has the measurements displayed:DisplayNuclei12
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:12|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notes:['3.4 Save images with initial nuclei outlines, nuclei area and marked dead nuclei  ']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
    Select the type of image to save:Image
    Select the image to save:DisplayNuclei12
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectNeighbors:[module_num:13|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notes:['3.5 Find adjacent dead and small nuclei ']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
    Select objects to measure:DeadNuclei
    Select neighboring objects to measure:NucSnorm
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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notes:['3.5 Find adjacent dead and small nuclei ']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
    Select objects to measure:NucSnorm
    Select neighboring objects to measure:DeadNuclei
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:15|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notes:['3.5 Find adjacent dead and small nuclei ']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
    Select the objects to filter:NucSnorm
    Name the output objects:NucSneighDead
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_DeadNuclei_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:16|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notes:['3.5 Find adjacent dead and small nuclei ']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
    Select the objects to filter:DeadNuclei
    Name the output objects:DeadNucFalse
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:DeadNucTrue
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_NucSnorm_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:17|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notes:['3.6 Expand dead nuclei to create overlap with other nuclei and combine them if they overlap. This way we merge potentially oversegmented small parts of nuclei if they are adjacent to normal nuclei']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
    Select the input objects:DeadNucFalse
    Name the output objects:DeadNucExp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
CombineObjects:[module_num:18|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notes:['3.6 Expand dead nuclei to create overlap with other nuclei and combine them if they overlap ']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
    Select initial object set:NucSneighDead
    Select object set to combine:DeadNucExp
    Select how to handle overlapping objects:Merge
    Name the combined object set:NucSmergedDead

CombineObjects:[module_num:19|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notes:['3.6 Expand dead nuclei to create overlap with other nuclei and combine them if they overlap ']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
    Select initial object set:NucSmergedDead
    Select object set to combine:NucSnorm
    Select how to handle overlapping objects:Discard
    Name the combined object set:NucScombined

OverlayOutlines:[module_num:20|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notes:['3.7 Save nuclei outlines with merged small nuclei and marked dead nuclei for removal ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayNuclei2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucScombined
    Select outline color:#FF0080
    Select objects to display:DeadNucTrue
    Select outline color:#8000FF
    Select objects to display:NucB

SaveImages:[module_num:21|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notes:['3.7 Save nuclei outlines with merged small nuclei and marked dead nuclei for removal ']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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:22|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:23|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notes:['4.1 Find SMALL cells with two or more SMALL nuclei. ']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
    Parent objects:CellS1
    Child objects:NucScombined
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:24|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notes:['4.1 Find SMALL cells with two or more SMALL nuclei. ']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
    Select the objects to filter:CellS1
    Name the output objects:CellS1wmultNucS
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucScombined_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:25|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notes:['4.1 Select SMALL nuclei which belong tow small cells with multiple nuclei.']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
    Select objects to be masked:NucScombined
    Name the masked objects:NucSmultinCellS1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellS1wmultNucS
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectNeighbors:[module_num:26|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select objects to measure:NucSmultinCellS1
    Select neighboring objects to measure:NucSmultinCellS1
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:27|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the objects to filter:NucSmultinCellS1
    Name the output objects:NucSmultinCellS1Neigh30
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NucSmultinCellS1Neigh
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Neighbors_PercentTouching_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:30
    Filter using a maximum measurement value?:No
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
MeasureObjectNeighbors:[module_num:28|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select objects to measure:NucSmultinCellS1Neigh
    Select neighboring objects to measure:NucSmultinCellS1Neigh30
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:29|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the objects to filter:NucSmultinCellS1Neigh
    Name the output objects:NucSmultinCellS1Neighw30
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_NucSmultinCellS1Neigh30_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:30|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select initial object set:NucSmultinCellS1Neigh30
    Select object set to combine:NucSmultinCellS1Neighw30
    Select how to handle overlapping objects:Merge
    Name the combined object set:NucSmultinCellS1NeighComb

SplitOrMergeObjects:[module_num:31|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the input objects:NucSmultinCellS1NeighComb
    Name the new objects:NucSmultinCellS1Merged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
CombineObjects:[module_num:32|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notes:['4.2 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select initial object set:NucSmultinCellS1Merged
    Select object set to combine:NucScombined
    Select how to handle overlapping objects:Discard
    Name the combined object set:NucS1

OverlayOutlines:[module_num:33|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notes:['4.3 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayNuclei3
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucS1
    Select outline color:#FF8000
    Select objects to display:NucSmultinCellS1Merged
    Select outline color:#8000FF
    Select objects to display:NucB

DisplayDataOnImage:[module_num:34|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notes:['4.3 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Display object or image measurements?:Object
    Select the input objects:NucSmultinCellS1
    Measurement to display:Neighbors_PercentTouching_Adjacent
    Select the image on which to display the measurements:OverlayNuclei3
    Text color:white
    Name the output image that has the measurements displayed:DisplayNuclei3
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:35|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notes:['4.3 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Select the type of image to save:Image
    Select the image to save:DisplayNuclei3
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:36|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notes:['4.3 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucS1
    Select outline color:#8000FF
    Select objects to display:NucB
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:#80FF00
    Select objects to display:CellS1

SaveImages:[module_num:37|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notes:['4.3 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Select the type of image to save:Image
    Select the image to save:Overlay1
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:38|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notes:['4.4 Find BIG cells with two or more BIG nuclei. ']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
    Parent objects:CellB1
    Child objects:NucB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:39|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notes:['4.4 Select Big nuclei which belong to big cells with multiple nuclei.']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
    Select the objects to filter:CellB1
    Name the output objects:CellB1wmultNucB
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:40|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notes:['4.4 Find BIG cells with two or more BIG nuclei. ']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
    Select objects to be masked:NucB
    Name the masked objects:NucBinCellB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellB1wmultNucB
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectNeighbors:[module_num:41|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select objects to measure:NucBinCellB1
    Select neighboring objects to measure:NucBinCellB1
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:42|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the objects to filter:NucBinCellB1
    Name the output objects:NucBinCellB1NeighTrue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NucBinCellB1Neigh
    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Neighbors_PercentTouching_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
MeasureObjectNeighbors:[module_num:43|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select objects to measure:NucBinCellB1Neigh
    Select neighboring objects to measure:NucBinCellB1NeighTrue
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:44|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the objects to filter:NucBinCellB1Neigh
    Name the output objects:NucBinCellB1NeighwTrue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_NucBinCellB1NeighTrue_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:45|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select initial object set:NucBinCellB1NeighTrue
    Select object set to combine:NucBinCellB1NeighwTrue
    Select how to handle overlapping objects:Merge
    Name the combined object set:NucBinCellB1NeighComb

SplitOrMergeObjects:[module_num:46|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select the input objects:NucBinCellB1NeighComb
    Name the new objects:NucBinCellB1NeighMerged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
CombineObjects:[module_num:47|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notes:['4.5 Merge those nuclei if ANY of them shares more than 30% of its borders with neighbor. If there are two adjacent nuclei within the same cell and they have substantial border then they were likely oversegmented and should be merged.']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
    Select initial object set:NucBinCellB1NeighMerged
    Select object set to combine:NucB
    Select how to handle overlapping objects:Merge
    Name the combined object set:NucB1

OverlayOutlines:[module_num:48|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notes:['4.6 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayNuclei4
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucS1
    Select outline color:#8000FF
    Select objects to display:NucB
    Select outline color:#FF8040
    Select objects to display:NucBinCellB1NeighMerged

DisplayDataOnImage:[module_num:49|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notes:['4.6 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Display object or image measurements?:Object
    Select the input objects:NucBinCellB1
    Measurement to display:Neighbors_PercentTouching_Adjacent
    Select the image on which to display the measurements:OverlayNuclei4
    Text color:white
    Name the output image that has the measurements displayed:DisplayNuclei4
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:50|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notes:['4.6 Save images with nuclei borders, percentage of shared borders and marked nuclei that were merged.']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
    Select the type of image to save:Image
    Select the image to save:DisplayNuclei4
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_4
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RelateObjects:[module_num:51|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notes:['4.7 Select small cells with small nuclei']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
    Parent objects:CellS1
    Child objects:NucS1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:52|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notes:['4.7 Select small cells with small nuclei']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
    Select the objects to filter:CellS1
    Name the output objects:CellSwNucS1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucS1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:53|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notes:['4.7 Select small cells with small nuclei']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
    Select objects to be masked:NucS1
    Name the masked objects:NucSinCellS1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellSwNucS1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:54|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notes:['4.7 Select small cells with big nuclei']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
    Parent objects:CellS1
    Child objects:NucB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:55|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notes:['4.7 Select small cells with big nuclei']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
    Select the objects to filter:CellS1
    Name the output objects:CellS1wNucB1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucB1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:56|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notes:['4.7 Select small cells with big nuclei']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
    Select objects to be masked:NucB1
    Name the masked objects:NucB1inCellS1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellS1wNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:57|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notes:['4.8 Relate small and big nuclei which belong to small cells']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
    Parent objects:NucB1inCellS1
    Child objects:NucSinCellS1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:58|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notes:['4.8 Relate small and big nuclei which belong to small cells']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
    Select the objects to filter:NucB1inCellS1
    Name the output objects:NucB1wNucS1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucSinCellS1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:59|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notes:['4.8 Relate small and big nuclei which belong to small cells']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
    Select objects to be masked:NucSinCellS1
    Name the masked objects:NucSinNucB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucB1wNucS1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:60|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notes:['4.8 Relate small and big nuclei which belong to small cells']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
    Parent objects:NucB1wNucS1
    Child objects:NucSinNucB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:61|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Select the input objects:NucSinNucB1
    Name the new objects:NucSinNucB1merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:NucB1wNucS1
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:62|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Select object sets to measure:NucB1wNucS1, NucSinNucB1merged
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:63|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Parent objects:NucB1wNucS1
    Child objects:NucSinNucB1merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:64|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Name the output measurement:NucBtoSRatio
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:NucB1wNucS1
    Select the first operand measurement:Mean_NucSinNucB1merged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:NucB1wNucS1
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:65|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Select the objects to filter:NucB1wNucS1
    Name the output objects:NucBinCellStrue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_NucBtoSRatio
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.1
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
MaskObjects:[module_num:66|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notes:['4.9 Remove small nuclei which are within big nuclei for the same small cell']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
    Select objects to be masked:NucS1
    Name the masked objects:NucS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBinCellStrue
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.7
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayOutlines:[module_num:67|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notes:['4.10 Save cells and nuclei outlines with marked selected big nuclei']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucS2
    Select outline color:#8000FF
    Select objects to display:NucB1
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:#FF8000
    Select objects to display:NucBinCellStrue

SaveImages:[module_num:68|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notes:['4.10 Save cells and nuclei outlines with marked selected big nuclei']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
    Select the type of image to save:Image
    Select the image to save:Overlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:69|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notes:['4.10 Save nuclei outlines with marked selected big nuclei']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OverlayNuclei5
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucS2
    Select outline color:#8000FF
    Select objects to display:NucB1
    Select outline color:#FF8040
    Select objects to display:NucBinCellStrue

SaveImages:[module_num:70|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notes:['4.10 Save nuclei outlines with marked selected big nuclei']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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei5
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_5
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:71|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

MaskObjects:[module_num:72|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notes:['5.1 Select SMALL and BIG nuclei which belong to small cells ']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
    Select objects to be masked:NucSinCellS1
    Name the masked objects:NucSinCellS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBinCellStrue
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.7
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:73|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notes:['5.1 Select SMALL and BIG nuclei which belong to small cells ']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
    Parent objects:CellS1wNucB1
    Child objects:NucSinCellS2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:74|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notes:['5.1 Select SMALL and BIG nuclei which belong to small cells ']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
    Select objects to be masked:NucB1inCellS1
    Name the masked objects:NucBinCellS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellS1wNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

CombineObjects:[module_num:75|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notes:['5.1 Select SMALL and BIG nuclei which belong to small cells ']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
    Select initial object set:NucBinCellS2
    Select object set to combine:NucSinCellS2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucInCellS1

MaskObjects:[module_num:76|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notes:['5.2 Select BIG nuclei which belong to big cells but not to small cells and select big cells with such nuclei']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
    Select objects to be masked:NucB1
    Name the masked objects:NucBnotCellS
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBinCellS2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:77|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notes:['5.2 Select BIG nuclei which belong to big cells but not to small cells and select big cells with such nuclei']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
    Parent objects:CellB1
    Child objects:NucBnotCellS
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:78|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notes:['5.2 Select BIG nuclei which belong to big cells but not to small cells and select big cells with such nuclei']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
    Select the objects to filter:CellB1
    Name the output objects:CellBwNucB1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucBnotCellS_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:79|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notes:['5.2 Select BIG nuclei which belong to big cells but not to small cells and select big cells with such nuclei']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
    Select objects to be masked:NucBnotCellS
    Name the masked objects:NucB1inCellB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBwNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:80|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notes:['5.3 Select nuclei which belong to small cells and to big cells with big nuclei']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
    Select objects to be masked:NucInCellS1
    Name the masked objects:NucInCellS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBwNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:81|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notes:['5.3 Select nuclei which belong to small cells and to big cells with big nuclei']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
    Parent objects:CellBwNucB1
    Child objects:NucInCellS2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:82|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notes:['5.3 Select nuclei which belong to small cells and to big cells with big nuclei']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
    Parent objects:CellBwNucB1
    Child objects:NucB1inCellB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
CombineObjects:[module_num:83|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Select initial object set:NucInCellS2
    Select object set to combine:NucB1inCellB1
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucInCellCombimed

MaskObjects:[module_num:84|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Select objects to be masked:NucInCellCombimed
    Name the masked objects:NucInBCombined
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBwNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:85|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Parent objects:CellBwNucB1
    Child objects:NucInBCombined
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:86|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Select the input objects:NucInCellS2
    Name the new objects:NucInCellSmerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBwNucB1
    Output object type:Disconnected

SplitOrMergeObjects:[module_num:87|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Select the input objects:NucB1inCellB1
    Name the new objects:NucBinCellBmerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBwNucB1
    Output object type:Disconnected

SplitOrMergeObjects:[module_num:88|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notes:['5.4 Combine selected nuclei and merge them per parent big cell']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
    Select the input objects:NucInBCombined
    Name the new objects:NucInBmerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBwNucB1
    Output object type:Disconnected

MaskObjects:[module_num:89|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notes:['5.5 Select all small nucleiwithin big cells and then filter those which do not belong to small cells or big nuclei. Then relate them with big cells and merge them per parent']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
    Select objects to be masked:NucInCellSmerged
    Name the masked objects:NucSnotB
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBinCellBmerged
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:90|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notes:['5.5 Select all small nucleiwithin big cells and then filter those which do not belong to small cells or big nuclei. Then relate them with big cells and merge them per parent']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
    Select objects to be masked:NucS1
    Name the masked objects:NucS1inCellBwNucB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBwNucB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:91|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notes:['5.5 Select all small nucleiwithin big cells and then filter those which do not belong to small cells or big nuclei. Then relate them with big cells and merge them per parent']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
    Select objects to be masked:NucS1inCellBwNucB1
    Name the masked objects:NucS1inCellBnotNucB
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBinCellBmerged
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:92|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notes:['5.5 Select all small nucleiwithin big cells and then filter those which do not belong to small cells or big nuclei. Then relate them with big cells and merge them per parent']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
    Parent objects:CellBwNucB1
    Child objects:NucS1inCellBnotNucB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:93|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notes:['5.5 Select all small nucleiwithin big cells and then filter those which do not belong to small cells or big nuclei. Then relate them with big cells and merge them per parent']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
    Select the input objects:NucS1inCellBnotNucB
    Name the new objects:NucS1inCellBnotNucBmerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBwNucB1
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:94|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select object sets to measure:CellB1, CellS1wNucB1, NucBinCellBmerged, NucInBmerged, NucInCellSmerged, NucS1inCellBnotNucB, NucS1inCellBnotNucBmerged, NucSnotB
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:95|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellBwNucB1
    Child objects:NucInBmerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:96|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellBwNucB1
    Child objects:NucInCellSmerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:97|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellBwNucB1
    Child objects:NucSnotB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:98|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellBwNucB1
    Child objects:NucBinCellBmerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:99|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellBwNucB1
    Child objects:NucS1inCellBnotNucBmerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:100|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Name the output measurement:NucRatio1
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:CellBwNucB1
    Select the first operand measurement:Mean_NucInCellSmerged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CellBwNucB1
    Select the second operand measurement:Mean_NucInBmerged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:101|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Name the output measurement:NucRatio2
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:CellBwNucB1
    Select the first operand measurement:Mean_NucSnotB_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CellBwNucB1
    Select the second operand measurement:Mean_NucInBmerged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:102|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Name the output measurement:NucRatio3
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:CellBwNucB1
    Select the first operand measurement:Mean_NucS1inCellBnotNucBmerged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CellBwNucB1
    Select the second operand measurement:Mean_NucBinCellBmerged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:103|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellBwNucB1
    Name the output objects:CellBtrue1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucB1inCellB1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucInCellS2_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Children_NucS1inCellBnotNucB_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
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
FilterObjects:[module_num:104|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellBwNucB1
    Name the output objects:CellBtrue2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucInCellS2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucSnotB_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Math_NucRatio1
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
    Select the measurement to filter by:Math_NucRatio3
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.3
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
FilterObjects:[module_num:105|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellBwNucB1
    Name the output objects:CellBtrue3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucInCellS2_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Children_NucSnotB_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Math_NucRatio1
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
    Select the measurement to filter by:Math_NucRatio3
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.3
    Select the measurement to filter by:Children_NucS1inCellBnotNucB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:106|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellBwNucB1
    Name the output objects:CellBtrue4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucInCellS2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucSnotB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_NucRatio2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.1
    Select the measurement to filter by:Math_NucRatio1
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
    Select the measurement to filter by:Math_NucRatio3
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.3
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
FilterObjects:[module_num:107|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellBwNucB1
    Name the output objects:CellBtrue5
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucInCellS2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucSnotB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_NucRatio1
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.345
    Select the measurement to filter by:Math_NucRatio2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.245
    Select the measurement to filter by:Math_NucRatio3
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.3
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
RelateObjects:[module_num:108|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Parent objects:CellB1
    Child objects:CellS1wNucB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:109|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Name the output measurement:CellStoCellBRatio
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:CellB1
    Select the first operand measurement:Mean_CellS1wNucB1_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CellB1
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:110|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select the objects to filter:CellB1
    Name the output objects:CellBtrue6
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CellS1wNucB1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:Children_NucBnotCellS_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Math_CellStoCellBRatio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:111|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select initial object set:CellBtrue1
    Select object set to combine:CellBtrue2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellBtrue12

CombineObjects:[module_num:112|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select initial object set:CellBtrue3
    Select object set to combine:CellBtrue4
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellBtrue34

CombineObjects:[module_num:113|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select initial object set:CellBtrue12
    Select object set to combine:CellBtrue34
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellBtrue1234

CombineObjects:[module_num:114|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select initial object set:CellBtrue1234
    Select object set to combine:CellBtrue5
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellBtrue12345

CombineObjects:[module_num:115|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notes:['5.6 Measure object areas, relate them to big cells, calculate area ratios and select big cells which match criteria']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
    Select initial object set:CellBtrue12345
    Select object set to combine:CellBtrue6
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellBtrue

OverlayOutlines:[module_num:116|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notes:['5.7 Save images with outlines of cells and nuclei belongin to big and small cells. Big cell that match criteria are marked as red, small nuclei outside big nuclei and small cells are orange, and nuclei which belong to small cells but not to big nuclei as pink. Three nuclei ratios are displayed with different colors.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay3
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8000FF
    Select objects to display:NucB1
    Select outline color:cyan
    Select objects to display:NucInCellSmerged
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:#FF0080
    Select objects to display:CellBtrue
    Select outline color:#FF8000
    Select objects to display:NucS1inCellBnotNucBmerged
    Select outline color:#FF80FF
    Select objects to display:NucSnotB

DisplayDataOnImage:[module_num:117|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notes:['5.7 Save images with outlines of cells and nuclei belongin to big and small cells. Big cell that match criteria are marked as red, small nuclei outside big nuclei and small cells are orange, and nuclei which belong to small cells but not to big nuclei as pink. Three nuclei ratios are displayed with different colors.']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
    Display object or image measurements?:Object
    Select the input objects:CellBwNucB1
    Measurement to display:Math_NucRatio1
    Select the image on which to display the measurements:Overlay3
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage3
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:118|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notes:['5.7 Save images with outlines of cells and nuclei belongin to big and small cells. Big cell that match criteria are marked as red, small nuclei outside big nuclei and small cells are orange, and nuclei which belong to small cells but not to big nuclei as pink. Three nuclei ratios are displayed with different colors.']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
    Display object or image measurements?:Object
    Select the input objects:CellBwNucB1
    Measurement to display:Math_NucRatio2
    Select the image on which to display the measurements:DisplayImage3
    Text color:#FF80FF
    Name the output image that has the measurements displayed:DisplayImage32
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):20
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:119|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notes:['5.7 Save images with outlines of cells and nuclei belongin to big and small cells. Big cell that match criteria are marked as red, small nuclei outside big nuclei and small cells are orange, and nuclei which belong to small cells but not to big nuclei as pink. Three nuclei ratios are displayed with different colors.']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
    Display object or image measurements?:Object
    Select the input objects:CellBwNucB1
    Measurement to display:Math_NucRatio3
    Select the image on which to display the measurements:DisplayImage32
    Text color:#FF8040
    Name the output image that has the measurements displayed:DisplayImage33
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:120|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notes:['5.7 Save images with outlines of cells and nuclei belongin to big and small cells. Big cell that match criteria are marked as red, small nuclei outside big nuclei and small cells are orange, and nuclei which belong to small cells but not to big nuclei as pink. Three nuclei ratios are displayed with different colors.']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage33
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:121|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

MaskObjects:[module_num:122|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to be masked:NucB1
    Name the masked objects:NucBtrue
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBtrue
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:123|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to be masked:NucS2
    Name the masked objects:NucS3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBtrue
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:124|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to be masked:NucS3
    Name the masked objects:NucS3inCellBtrue
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBtrue
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.99
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:125|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the input objects:NucBtrue
    Name the output objects:NucBtrue20_1
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:25
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
MeasureObjectNeighbors:[module_num:126|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to measure:NucBtrue20_1
    Select neighboring objects to measure:NucBtrue20_1
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:127|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Parent objects:NucBtrue20_1
    Child objects:NucBtrue
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:128|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the objects to filter:NucBtrue20_1
    Name the output objects:NucBtrue20Neigh_1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:NucBtrue
    Name the relabeled objects:NucNeigh1
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
ExpandOrShrinkObjects:[module_num:129|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the input objects:NucBtrue
    Name the output objects:NucBtrue20_2
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:25
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
ExpandOrShrinkObjects:[module_num:130|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the input objects:NucS3inCellBtrue
    Name the output objects:NucS3inCellBtrue20
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:25
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
MeasureObjectNeighbors:[module_num:131|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to measure:NucBtrue20_2
    Select neighboring objects to measure:NucS3inCellBtrue20
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:132|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Parent objects:NucBtrue20_2
    Child objects:NucS3inCellBtrue
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:133|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the objects to filter:NucBtrue20_2
    Name the output objects:NucBtrue20_2neigh
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_NucS3inCellBtrue20_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:NucBtrue
    Name the relabeled objects:NucNeigh2
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
MeasureObjectNeighbors:[module_num:134|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select objects to measure:NucS3inCellBtrue20
    Select neighboring objects to measure:NucBtrue20_2
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:135|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Parent objects:NucS3inCellBtrue20
    Child objects:NucS3inCellBtrue
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:136|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select the objects to filter:NucS3inCellBtrue20
    Name the output objects:NucS3inCellBtrue20neigh
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_NucBtrue20_2_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:NucS3inCellBtrue
    Name the relabeled objects:NucNeigh3
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
CombineObjects:[module_num:137|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select initial object set:NucNeigh1
    Select object set to combine:NucNeigh2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucNeigh12

CombineObjects:[module_num:138|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notes:['5.8 For big cells which matched above criteria we select big nuclei which belong to them, discard small nuclei within selected big nuclei, and merge neighboring nuclei within selected big cells.']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
    Select initial object set:NucNeigh12
    Select object set to combine:NucNeigh3
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucNeigh

OverlayOutlines:[module_num:139|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notes:['5.9 Save images with cells and nuclei outlines with marked nuclei which were merged']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay4
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8000FF
    Select objects to display:NucBtrue
    Select outline color:yellow
    Select objects to display:CellBtrue
    Select outline color:cyan
    Select objects to display:NucS3inCellBtrue
    Select outline color:White
    Select objects to display:NucBtrue20_2
    Select outline color:#FF0080
    Select objects to display:NucNeigh12
    Select outline color:white
    Select objects to display:NucS3inCellBtrue20
    Select outline color:#FF80C0
    Select objects to display:NucNeigh3

DisplayDataOnImage:[module_num:140|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notes:['5.9 Save images with cells and nuclei outlines with marked nuclei which were merged']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
    Display object or image measurements?:Object
    Select the input objects:NucBtrue20_1
    Measurement to display:Neighbors_NumberOfNeighbors_Adjacent
    Select the image on which to display the measurements:Overlay4
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage41
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:141|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notes:['5.9 Save images with cells and nuclei outlines with marked nuclei which were merged']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
    Display object or image measurements?:Object
    Select the input objects:NucBtrue20_2
    Measurement to display:Neighbors_NumberOfNeighbors_NucS3inCellBtrue20_Adjacent
    Select the image on which to display the measurements:DisplayImage41
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage42
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):15
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:142|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notes:['5.9 Save images with cells and nuclei outlines with marked nuclei which were merged']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
    Display object or image measurements?:Object
    Select the input objects:NucS3inCellBtrue20
    Measurement to display:Neighbors_NumberOfNeighbors_NucBtrue20_2_Adjacent
    Select the image on which to display the measurements:DisplayImage42
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage43
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:143|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notes:['5.9 Save images with cells and nuclei outlines with marked nuclei which were merged']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage43
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_4
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:144|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:145|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Parent objects:CellBtrue
    Child objects:NucNeigh
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:146|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select the input objects:NucNeigh
    Name the new objects:NucNeighConvex
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBtrue
    Output object type:Convex hull

SplitOrMergeObjects:[module_num:147|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select the input objects:NucNeigh
    Name the new objects:NucNeighMerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellBtrue
    Output object type:Disconnected

CombineObjects:[module_num:148|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select initial object set:NucNeighMerged
    Select object set to combine:NucBtrue
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucBtrue2

CombineObjects:[module_num:149|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select initial object set:NucBtrue2
    Select object set to combine:NucBinCellStrue
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucBtrue3

MaskObjects:[module_num:150|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select objects to be masked:NucS3
    Name the masked objects:NucS4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBtrue3
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:151|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select objects to be masked:NucS4
    Name the masked objects:NucS5
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBtrue
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:152|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select objects to be masked:NucB1
    Name the masked objects:NucBfalse
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucBtrue3
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

OverlayOutlines:[module_num:153|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Segmentation6
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#8080FF
    Select objects to display:NucBtrue3
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:cyan
    Select objects to display:NucS5
    Select outline color:#FF0080
    Select objects to display:NucBfalse

SaveImages:[module_num:154|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Segmentation6
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_6
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:155|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
    Select the input objects:NucS5
    Name the output objects:NucS5exp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
MaskObjects:[module_num:156|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
    Select objects to be masked:NucBfalse
    Name the masked objects:NucBFalseMasked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NucS5exp
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

CombineObjects:[module_num:157|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notes:['5.5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select initial object set:NucS5
    Select object set to combine:NucBFalseMasked
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucSwBfalse

CombineObjects:[module_num:158|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select initial object set:NucBtrue3
    Select object set to combine:NucSwBfalse
    Select how to handle overlapping objects:Preserve
    Name the combined object set:NucleiCombined

MeasureObjectSizeShape:[module_num:159|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select object sets to measure:NucleiCombined
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:160|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select the objects to filter:NucleiCombined
    Name the output objects:NucleiFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:161|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select objects to be masked:NucleiFiltered
    Name the masked objects:NucleiFilteredinCellS
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellS1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:162|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Parent objects:CellS1
    Child objects:NucleiFilteredinCellS
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:163|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notes:['5.10 Combine neighboring nuclei set with other nuclei, exclude  small nuclei within selected big nuclei, then exclude the remaining small nuclei from the rest of big nuclei. Remove nuclei with small area after combining and reassignment. Then filter nuclei which belong to cells.']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
    Select the objects to filter:CellS1
    Name the output objects:CellS1wNucleiFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:CellS1noNucleiFiltered
    Select the measurement to filter by:Children_NucleiFilteredinCellS_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectNeighbors:[module_num:164|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enabled:False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
    Select objects to measure:CellS1noNucleiFiltered
    Select neighboring objects to measure:CellS1wNucleiFiltered
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:165|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enabled:False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
    Select the objects to filter:CellS1noNucleiFiltered
    Name the output objects:CellS1noNucNeigh
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_CellS1wNucleiFiltered_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:166|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enabled:False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
    Select initial object set:CellS1wNucleiFiltered
    Select object set to combine:CellS1noNucNeigh
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CellS1wNeigh

OverlayOutlines:[module_num:167|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay_temp0
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucleiFiltered
    Select outline color:#8000FF
    Select objects to display:CellBtrue
    Select outline color:#80FF00
    Select objects to display:CellS1wNucleiFiltered
    Select outline color:#FF0080
    Select objects to display:CellS1noNucNeigh

SaveImages:[module_num:168|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_temp0
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_t0
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation_temp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskObjects:[module_num:169|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Select objects to be masked:NucleiFiltered
    Name the masked objects:NucleiFilteredInCellB
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellB1
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:170|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Parent objects:CellB1
    Child objects:NucleiFilteredInCellB
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:171|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Select the objects to filter:CellB1
    Name the output objects:CellBwithOneNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiFilteredInCellB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
RelateObjects:[module_num:172|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Parent objects:CellBwithOneNuc
    Child objects:NucleiFilteredInCellB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:173|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Select object sets to measure:CellBwithOneNuc
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:174|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Name the output measurement:DistanceToDiameter
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:CellBwithOneNuc
    Select the first operand measurement:Mean_NucleiFilteredInCellB_Distance_Centroid_CellB1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:CellBwithOneNuc
    Select the second operand measurement:AreaShape_EquivalentDiameter
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:175|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Select the objects to filter:CellBwithOneNuc
    Name the output objects:CellBwithOneNucTrue
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_DistanceToDiameter
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.3
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
CombineObjects:[module_num:176|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notes:['5.11 For big cells which did not match previous criteria and have exactly one nucleus we select cells with nucleus positioned in the cell center']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
    Select initial object set:CellBwithOneNucTrue
    Select object set to combine:CellBtrue
    Select how to handle overlapping objects:Merge
    Name the combined object set:CellBtruemasks

OverlayOutlines:[module_num:177|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay_temp1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucleiFilteredInCellB
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:#FF0080
    Select objects to display:CellBwithOneNuc
    Select outline color:#8000FF
    Select objects to display:CellBtrue
    Select outline color:#80FF00
    Select objects to display:CellS1

DisplayDataOnImage:[module_num:178|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:CellBwithOneNuc
    Measurement to display:Math_DistanceToDiameter
    Select the image on which to display the measurements:Overlay_temp1
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage_t12
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:179|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage_t12
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_t1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation_temp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:180|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

ExpandOrShrinkObjects:[module_num:181|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select the input objects:CellBtruemasks
    Name the output objects:CellB1exp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
ExpandOrShrinkObjects:[module_num:182|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select the input objects:CellS1wNucleiFiltered
    Name the output objects:CellS1exp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
CombineObjects:[module_num:183|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select initial object set:CellB1exp
    Select object set to combine:CellS1exp
    Select how to handle overlapping objects:Merge
    Name the combined object set:Cellexp

OverlayOutlines:[module_num:184|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay_temp2
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucleiFiltered
    Select outline color:#8000FF
    Select objects to display:CellBtrue
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:white
    Select objects to display:Cellexp

SaveImages:[module_num:185|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_temp2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_t2
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation_temp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:186|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

OverlayOutlines:[module_num:187|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay_temp3
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:NucleiFiltered
    Select outline color:#8000FF
    Select objects to display:CellBtrue
    Select outline color:#FF8080
    Select objects to display:Cellexp
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:white
    Select objects to display:Cellexp

SaveImages:[module_num:188|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_temp3
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_t3
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation_temp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SplitOrMergeObjects:[module_num:189|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select the input objects:Cellexp
    Name the new objects:CellBorders
    Operation:Merge
    Maximum distance within which to merge objects:25
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MaskObjects:[module_num:190|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select objects to be masked:NucleiFiltered
    Name the masked objects:Nuclei1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBorders
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.3
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:191|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select the input objects:Nuclei1
    Name the output objects:Nuclei1Exp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
CombineObjects:[module_num:192|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select initial object set:CellBorders
    Select object set to combine:Nuclei1Exp
    Select how to handle overlapping objects:Merge
    Name the combined object set:Borders

SplitOrMergeObjects:[module_num:193|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notes:['6.1 Using selected cell and nuclei objects we create borders within objects were identified. We first expand objects and then combine them with merging of neighboring borders.']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
    Select the input objects:Borders
    Name the new objects:BordersMerged
    Operation:Merge
    Maximum distance within which to merge objects:10
    Merge using a grayscale image?:No
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    Merging method:Distance
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
OverlayOutlines:[module_num:194|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay5
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Nuclei1
    Select outline color:#80FF00
    Select objects to display:CellS1
    Select outline color:yellow
    Select objects to display:CellB1
    Select outline color:White
    Select objects to display:BordersMerged
    Select outline color:#FF0080
    Select objects to display:CellBwithOneNucTrue
    Select outline color:#FF0080
    Select objects to display:CellBtrue

SaveImages:[module_num:195|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay5
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_5
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:196|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notes:['6.2 Save images with marked borders']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay5
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0080
    Select objects to display:NucleiFiltered
    Select outline color:#80FF00
    Select objects to display:CellS1wNucleiFiltered
    Select outline color:yellow
    Select objects to display:CellBtruemasks
    Select outline color:White
    Select objects to display:BordersMerged
    Select outline color:cyan
    Select objects to display:Nuclei1

DisplayDataOnImage:[module_num:197|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notes:['6.2 Save images with marked borders']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
    Display object or image measurements?:Object
    Select the input objects:CellBwithOneNuc
    Measurement to display:Math_DistanceToDiameter
    Select the image on which to display the measurements:Overlay5
    Text color:#FF0080
    Name the output image that has the measurements displayed:DisplayImage5
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:198|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notes:['6.2 Save images with marked borders']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage5
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_5
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:199|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select the input image:ERK
    Name the output image:MaskedERK
    Use objects or an image as a mask?:Objects
    Select object for mask:BordersMerged
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    Invert the mask?:No

CombineObjects:[module_num:200|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select initial object set:NucNeighConvex
    Select object set to combine:Nuclei1Exp
    Select how to handle overlapping objects:Discard
    Name the combined object set:NucleiConvex

RelateObjects:[module_num:201|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Parent objects:NucleiConvex
    Child objects:Nuclei1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:202|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select the input objects:Nuclei1
    Name the new objects:NucleiMergedConvex
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:NucleiConvex
    Output object type:Disconnected

IdentifySecondaryObjects:[module_num:203|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select the input objects:NucleiMergedConvex
    Name the objects to be identified:Cells_1
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedERK
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:500
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:204|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select object sets to measure:Cells_1, NucleiMergedConvex
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:205|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Name the output measurement:Measurement
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:NucleiMergedConvex
    Select the first operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:Cells_1
    Select the second operand measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:206|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notes:['6.3 We use borders to mask images used for segmentation of secondary objects, combine nuclei which should be merged,and identify secondary objects, calculate their area and discard both cells and nuclei if area of cytoplasm and nuclei are very close']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
    Select the objects to filter:NucleiMergedConvex
    Name the output objects:Nuclei2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:NucleiRemoved
    Select the measurement to filter by:Math_Measurement
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.95
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
OverlayOutlines:[module_num:207|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notes:['6.4  Save images with segmentation results ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay6
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Nuclei1
    Select outline color:#80FF00
    Select objects to display:Cells_1
    Select outline color:#FF0080
    Select objects to display:NucleiRemoved

DisplayDataOnImage:[module_num:208|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notes:['6.4  Save images with segmentation results ']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
    Display object or image measurements?:Object
    Select the input objects:NucleiMergedConvex
    Measurement to display:Math_Measurement
    Select the image on which to display the measurements:Overlay6
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage6
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:209|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notes:['6.4  Save images with segmentation results ']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage6
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_6
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Segmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectNeighbors:[module_num:210|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select objects to measure:NucleiRemoved
    Select neighboring objects to measure:Nuclei2
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:211|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the objects to filter:NucleiRemoved
    Name the output objects:NucleiRemoved2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_Nuclei2_Adjacent
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:212|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the input objects:NucleiRemoved2
    Name the output objects:NucleiRemoved2exp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
CombineObjects:[module_num:213|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select initial object set:Nuclei2
    Select object set to combine:NucleiRemoved2exp
    Select how to handle overlapping objects:Merge
    Name the combined object set:Nuclei

ExpandOrShrinkObjects:[module_num:214|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the input objects:Nuclei
    Name the output objects:NucleiExp
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
CombineObjects:[module_num:215|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select initial object set:NucNeighConvex
    Select object set to combine:NucleiExp
    Select how to handle overlapping objects:Discard
    Name the combined object set:NucleiConvex2

RelateObjects:[module_num:216|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Parent objects:NucleiConvex2
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:217|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the input objects:Nuclei
    Name the new objects:NucleiMergedConvex2
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:NucleiConvex2
    Output object type:Disconnected

IdentifySecondaryObjects:[module_num:218|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the input objects:NucleiMergedConvex2
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedERK
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:500
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    Thresholding method:Otsu

OverlayOutlines:[module_num:219|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:Overlay7
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#FF0080
    Select objects to display:Cells

DisplayDataOnImage:[module_num:220|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Overlay7
    Text color:#FF0080
    Name the output image that has the measurements displayed:DisplayImage71
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:221|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:DisplayImage71
    Text color:cyan
    Name the output image that has the measurements displayed:DisplayImage72
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:222|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notes:['6.7 Combine nuclei which were selected for removal with adjacent nucleus, remove nuclei without adjacent neighbors and resegment the cells using filtered nuclei']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
    Select the type of image to save:Image
    Select the image to save:DisplayImage72
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_7
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|FinalSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:223|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
    Select the input objects:Cells
    Name the output image:Cellmasks
    Select the color format:uint16
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
SaveImages:[module_num:224|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
    Select the type of image to save:Image
    Select the image to save:Cellmasks
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:225|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
    Select the input objects:Nuclei
    Name the output image:Nucleimasks
    Select the color format:uint16
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
SaveImages:[module_num:226|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
    Select the type of image to save:Image
    Select the image to save:Nucleimasks
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:227|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enabled:False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
    Input:None
    Name the output image:OverlayObjects
    Objects:Do not use
    Opacity:0.3

ResizeObjects:[module_num:228|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enabled:False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
    Select the input object:Nuclei
    Name the output object:NucleiResized
    Method:Match Image
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
ExpandOrShrinkObjects:[module_num:229|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
    Select the input objects:Nuclei
    Name the output objects:NucleiResized
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifySecondaryObjects:[module_num:230|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
    Select the input objects:NucleiResized
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Distance - B
    Select the input image:MaskedERK
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.06,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:231|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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:NucleiResized
    Name the tertiary objects to be identified:Cytoring
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:232|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
    Select images to measure:ERK
    Select objects to measure:Cytoring, NucleiResized

MeasureObjectIntensity:[module_num:233|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
    Select images to measure:DNA, ERK
    Select objects to measure:Cytoring, Nuclei

MeasureGranularity:[module_num:234|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
    Select images to measure:BF
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:2

CalculateMath:[module_num:235|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
    Name the output measurement:CytoNucRatio
    Operation:Divide
    Select the first operand measurement type:Object
    Select the first operand objects:Cytoring
    Select the first operand measurement:Intensity_MedianIntensity_ERK
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:NucleiResized
    Select the second operand measurement:Intensity_MedianIntensity_ERK
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:236|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enabled:False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
    Parent objects:Nuclei
    Child objects:NucleiResized
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:237|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ERK
    Name the output image:OverlayCyto1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#FF0080
    Select objects to display:Cells
    Select outline color:white
    Select objects to display:Cytoplasm

DisplayDataOnImage:[module_num:238|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
    Display object or image measurements?:Object
    Select the input objects:NucleiResized
    Measurement to display:Math_CytoNucRatio
    Select the image on which to display the measurements:OverlayCyto1
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage9
    Font size (points):12
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:239|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage9
    Select method for constructing file names:From image filename
    Select image name for file prefix:ERK
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_8
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|FinalSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:240|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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

RelateObjects:[module_num:241|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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:242|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
    Parent objects:Nuclei
    Child objects:NucleiResized
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:243|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
    Select the input objects:Nuclei
    Name the new objects:NucleiMerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cells
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:244|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
    Select object sets to measure:NucleiMerged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

RelateObjects:[module_num:245|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
    Parent objects:Cells
    Child objects:NucleiMerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:246|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_HuMoment_1,Nuclei|AreaShape_HuMoment_2,Nuclei|AreaShape_HuMoment_0,Nuclei|AreaShape_HuMoment_6,Nuclei|AreaShape_HuMoment_5,Nuclei|AreaShape_HuMoment_3,Nuclei|AreaShape_HuMoment_4,Nuclei|AreaShape_NormalizedMoment_1_3,Nuclei|AreaShape_NormalizedMoment_1_2,Nuclei|AreaShape_NormalizedMoment_1_0,Nuclei|AreaShape_NormalizedMoment_1_1,Nuclei|AreaShape_NormalizedMoment_2_2,Nuclei|AreaShape_NormalizedMoment_2_0,Nuclei|AreaShape_NormalizedMoment_2_1,Nuclei|AreaShape_NormalizedMoment_2_3,Nuclei|AreaShape_NormalizedMoment_0_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Results_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:247|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Results_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
MeasureObjectIntensity:[module_num:248|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enabled:False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
    Select images to measure:Hoechst
    Select objects to measure:Nuclei

MeasureGranularity:[module_num:249|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enabled:False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
    Select images to measure:Hoechst
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:2

MeasureObjectSizeShape:[module_num:250|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enabled:False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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

RelateObjects:[module_num:251|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enabled:False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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:252|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enabled:False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
    Select the input objects:Nuclei
    Name the new objects:NucleiMerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cells
    Output object type:Disconnected

MeasureObjectIntensity:[module_num:253|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enabled:False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
    Select images to measure:Hoechst
    Select objects to measure:NucleiMerged

MeasureGranularity:[module_num:254|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enabled:False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
    Select images to measure:Hoechst
    Measure within objects?:Yes
    Select objects to measure:NucleiMerged
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:2

MeasureObjectSizeShape:[module_num:255|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enabled:False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
    Select object sets to measure:NucleiMerged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

RelateObjects:[module_num:256|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enabled:False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
    Parent objects:Cells
    Child objects:NucleiMerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:257|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enabled:False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
    Select images to measure:Lyso, TMRE, Tubulin
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:258|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enabled:False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
    Select images to measure:Lyso, TMRE, Tubulin
    Hidden:1
    Hidden:1
    Hidden:3
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:NucleiMergedConvex2
    Scale the bins?:Yes
    Number of bins:5
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    Image:TMRE
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Reds
    Save display as image?:Yes
    Output image name:MitoHeatmap
    Image:Lyso
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Greens
    Save display as image?:Yes
    Output image name:LysoHeatmap
    Image:Tubulin
    Objects to display:Do not use
    Number of bins:5
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:Yes
    Output image name:TubulinHeatmap

MeasureTexture:[module_num:259|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enabled:False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
    Select images to measure:Lyso, TMRE, Tubulin
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

OverlayOutlines:[module_num:260|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MitoHeatmap
    Name the output image:MitoHetmapOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:black
    Select objects to display:NucleiMergedConvex2

SaveImages:[module_num:261|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MitoHetmapOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:TMRE
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|MitochondriaIntensity
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:262|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LysoHeatmap
    Name the output image:LysoHetmapOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:black
    Select objects to display:NucleiMergedConvex2

SaveImages:[module_num:263|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:LysoHetmapOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lyso
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|LysosomeIntensity
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:264|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TubulinHeatmap
    Name the output image:TubulinHetmapOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:black
    Select objects to display:NucleiMergedConvex2

SaveImages:[module_num:265|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:TubulinHetmapOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|TubulinIntensity
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:266|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Texture_DifferenceEntropy_Lyso_3_03_256,Cells|Texture_DifferenceEntropy_Lyso_3_00_256,Cells|Texture_DifferenceEntropy_Lyso_3_02_256,Cells|Texture_DifferenceEntropy_Lyso_3_01_256,Cells|Texture_DifferenceEntropy_TMRE_3_03_256,Cells|Texture_DifferenceEntropy_TMRE_3_00_256,Cells|Texture_DifferenceEntropy_TMRE_3_02_256,Cells|Texture_DifferenceEntropy_TMRE_3_01_256,Cells|Texture_DifferenceEntropy_Tubulin_3_01_256,Cells|Texture_DifferenceEntropy_Tubulin_3_03_256,Cells|Texture_DifferenceEntropy_Tubulin_3_00_256,Cells|Texture_DifferenceEntropy_Tubulin_3_02_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:H1299_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
